PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'n_square': u'32', u'probeFrames': u'5', u'participant': u'', u'session': u'001', u'image_size': u'256', u'premask_dur': u'20', u'postmask_dur': u'20'}
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Save csv file = True
  expName = Expt_DEF_calibration
  Screen = 1
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Routines
  Routine response_routine
    CodeComponent reponse_trigger_code
      Begin Routine:
        trials.addData("discrim_resptime", globalClock.getTime() - startTime)

        resp_options = [['nV_V',['Nonliving_Things','Living_Things']],
                        ['V_nV',['Living_Things','Nonliving_Things']]]

        idx = np.random.choice([0,1])
        msg = '{}'.format(resp_options[idx][0])

        trials.addData("response_window", resp_options[idx][0])
      End Routine:
        temp_correctAns = np.where(np.array(resp_options[idx][1]) == category)[0][0]+1

        trials.addData('correctAns',temp_correctAns)

        # objective accuracy

        if (response.keys == str(temp_correctAns)) or (response.keys == temp_correctAns):
           temp_corr = 1
        else:
            temp_corr = 0

        trials.addData('response.corr' , temp_corr)
    KeyboardComponent response
      correctAns = $correctAns
      stopVal [duration (s)] = 1.5
      forceEndRoutine = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
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    TextComponent tell_response
      stopVal [duration (s)] = 1.5
      startVal [frame N] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        $msg
  Routine jitter_delay
    CodeComponent pick_jitter_delay_duration
      Begin Routine:
        jitter_dur_options = [1.5,2.0,2.5,3.0,3.5]
        pick_chance = [0.5,0.25,0.1,0.1,0.05]
        jitter_delay_dur = np.random.choice(jitter_dur_options,size=1,p=pick_chance)[0]

        trials.addData("jitter1", jitter_delay_dur)
    TextComponent delay_post_mask
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine introduction
    TextComponent text
      text = Empezando
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_2
      text = +
      stopVal [duration (s)] = 2
      startVal [time (s)] = 1
      letterHeight = 0.1
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  Routine visibility
    KeyboardComponent visible
      correctAns = 1
      storeCorrect = True
      stopVal [duration (s)] = 1.5
      forceEndRoutine = False
      allowedKeys = '1','2','3'
      startVal [time (s)] = 0.0
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    TextComponent tell_visible
      text = ?
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent trigger_visibility
      Begin Routine:
        trials.addData("visibil_resptime", globalClock.getTime() - startTime)
    CodeComponent staircase
      Begin Experiment:
        response_no_experience = []
      End Routine:
        trials.addData('probeFrames',curr)

        count += 1
        if visible.keys == '1':# invisible
                curr += np.random.choice([1,2,3],size=1)[0]
                if curr < 1:  curr = 1
                response_no_experience.append(temp_corr)
        elif visible.keys == '2':# partially aware
                curr -= 1
                if curr < 1:  curr = 1
        elif visible.keys == '3': # visible
                curr -= np.random.choice([2,3],size=1,p=[0.5,0.5])[0]
                if curr < 1: curr = 1

        #elif visible.keys == '4': # fully visible
        #        curr -= 3
        #        if curr < 1: curr = 1
  Routine show_message
    CodeComponent print_
      Begin Routine:
        meanacc = trials.data['response.corr'].mean()
        meanvis = trials.data['visible.corr'].mean()
        print_msg="{:.2f}, {}".format(
        meanvis,curr,)
        print("mean vis = {:.2f}, frames = {}, p(correct) = {:.2f}".format(
            meanvis,curr,meanacc,))
        #msg = msg + '\nkey={},cor={}'.format(response.keys,str(temp_correctAns))
        #msg WOULD BE TO DISPLAY IN A TXT OBJECT - THAT HAS BEEN DELETED
    TextComponent text_3
      text [set every repeat] = $print_msg
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine premask
    TextComponent fixation
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0
      letterHeight = 0.1
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    TextComponent blank
      stopVal [duration (s)] = 0.5
      startVal [condition] = $fixation.status==FINISHED
      letterHeight = 0.1
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    GratingComponent premask_1
      tex [set every frame] = $np.random.rand(n_square,n_square) * 2 -1
      stopVal [duration (frames)] = $premask_dur
      interpolate = nearest
      units = pix
      phase [set every repeat] = $np.random.uniform(0,1,2).round(1)
      startVal [condition] = $blank.status == FINISHED
      sf = None
      size = $(image_size, image_size)
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  Routine probe_routine
    CodeComponent code
      Begin Routine:
        trials.addData("image_onset_time", globalClock.getTime() - startTime)
    ImageComponent probe
      stopVal [duration (frames)] = $curr
      units = pix
      startVal [frame N] = 0.0
      image [set every repeat] = $probe_path
      size = $(image_size, image_size)
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  Routine End_experiment
    TextComponent The_End
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_2
      End Experiment:
        print(globalClock.getTime() - startTime)
        print("mean vis = {:.2f}, frames = {}, p(correct) = {:.2f}".format(
            meanvis,curr,meanacc,))
        print('performance vis = 1 is {:.2f}'.format(np.mean(response_no_experience)))
  Routine setupTRIGetc
    CodeComponent setup_vbles_trigger
      Begin Experiment:
        curr=int(expInfo['probeFrames'])
        count=0

        n_total = 96
        premask_dur = int(expInfo['premask_dur'])
        postmask_dur = int(expInfo['postmask_dur'])
        n_square = int(expInfo['n_square'])
        image_size = int(expInfo['image_size'])
      Begin Routine:
        globalClock.reset()
        startTime = globalClock.getTime()
  Routine postmask
    GratingComponent postmask_1
      tex [set every frame] = $np.random.rand(n_square,n_square) * 2 -1
      stopVal [duration (frames)] = $postmask_dur
      interpolate = nearest
      units = pix
      phase [set every repeat] = $np.random.uniform(0,1,2).round(1)
      startVal [frame N] = 0
      sf = None
      size = $(image_size, image_size)
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  Routine post_trial_jitter
    TextComponent post_fixation
      text = +
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent pick_post_fixation_duration
      Begin Routine:
        jitter_dur_options = [6.0,6.5,7.0,7.5,8.0]
        pick_chance = [0.5,0.25,0.1,0.1,0.05]
        post_trial_jitter_duration = np.random.choice(jitter_dur_options,size=1,p=pick_chance)[0]


        trials.addData("jitter2", post_trial_jitter_duration)
Flow
  Routine setupTRIGetc
  Routine introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = csvs/calibration.csv
    loopType = random
    nReps = 1
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    conditions:
      [{u'category': u'Nonliving_Things', u'probe_path': u'../experiment_stimuli/bw_bc_bl/Nonliving_Things/Furniture/Chest-of-drawers_10.jpg', u'subcategory': u'Furniture', u'fixation_duration': 0, u'label': u'Chest-of-drawers'},
      {u'category': u'Living_Things', u'probe_path': u'../experiment_stimuli/bw_bc_bl/Living_Things/Animals/armadillo_3.jpg', u'subcategory': u'Animals', u'fixation_duration': 0, u'label': u'armadillo'},
      {u'category': u'Nonliving_Things', u'probe_path': u'../experiment_stimuli/bw_bc_bl/Nonliving_Things/Furniture/armchair_2.jpg', u'subcategory': u'Furniture', u'fixation_duration': 0, u'label': u'armchair'},
      {u'category': u'Nonliving_Things', u'probe_path': u'../experiment_stimuli/bw_bc_bl/Nonliving_Things/Tools/axe_8.jpg', u'subcategory': u'Tools', u'fixation_duration': 0, u'label': u'axe'},
      {u'category': u'Living_Things', u'probe_path': u'../experiment_stimuli/bw_bc_bl/Living_Things/Birds/barn-owl_6.jpg', u'subcategory': u'Birds', u'fixation_duration': 0, u'label': u'barn-owl'},
      {u'category': u'Nonliving_Things', u'probe_path': u'../experiment_stimuli/bw_bc_bl/Nonliving_Things/Furniture/bed_11.jpg', u'subcategory': u'Furniture', u'fixation_duration': 0, u'label': u'bed'},
      {u'category': u'Nonliving_Things', u'probe_path': u'../experiment_stimuli/bw_bc_bl/Nonliving_Things/Furniture/bedside-table_16.jpg', u'subcategory': u'Furniture', u'fixation_duration': 0, u'label': u'bedside-table'}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
    Routine premask
    Routine probe_routine
    Routine postmask
    Routine jitter_delay
    Routine response_routine
    Routine visibility
    Routine post_trial_jitter
    Routine show_message
  LoopTerminator trials
  Routine End_experiment
