PsychoPy2experiment version="1.83.04"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'n_square': u'32', u'probeFrames': u'5', u'participant': u'', u'session': u'001', u'image_size': u'256', u'premask_dur': u'20', u'postmask_dur': u'20', u'block': u'1'}
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Save csv file = True
  expName = Expt_fMRI
  Screen = 1
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Routines
  Routine response_routine
    CodeComponent reponse_trigger_code
      Begin Routine:
        trials.addData("discrim_resptime", globalClock.getTime() - startTime)

        resp_options = [['nV_V',['Nonliving_Things','Living_Things']],
                        ['V_nV',['Living_Things','Nonliving_Things']]]

        idx = np.random.choice([0,1])
        msg = '{}'.format(resp_options[idx][0])

        trials.addData("response_window", resp_options[idx][0])
      End Routine:
        temp_correctAns = np.where(np.array(resp_options[idx][1]) == category)[0][0]+1

        trials.addData('correctAns',temp_correctAns)

        # objective accuracy

        if (response.keys == str(temp_correctAns)) or (response.keys == temp_correctAns):
           temp_corr = 1
        else:
            temp_corr = 0

        trials.addData('response.corr' , temp_corr)
    KeyboardComponent response
      correctAns = $correctAns
      stopVal [duration (s)] = 1.5
      forceEndRoutine = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
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    TextComponent tell_response
      stopVal [duration (s)] = 1.5
      startVal [frame N] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        $msg
  Routine jitter_delay
    CodeComponent pick_jitter_delay_duration
      Begin Experiment:
        jit_count = 0

        jitter_dur_options = np.concatenate([[1.5]*16,[2.0]*8,[2.5]*4,[3.0]*2,[3.5]*2])

        np.random.shuffle(jitter_dur_options)
      Begin Routine:
        jitter_delay_dur=jitter_dur_options[jit_count]#first is jit1_count 0

        trials.addData("jitter1", jitter_delay_dur)
    TextComponent delay_post_mask
      text = +
      stopVal [duration (s)] = $jitter_delay_dur
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine introduction
    TextComponent text
      text = Empezando
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_2
      text = +
      stopVal [duration (s)] = 7
      startVal [time (s)] = 3
      letterHeight = 0.1
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  Routine visibility
    KeyboardComponent visible
      correctAns = 1
      storeCorrect = True
      stopVal [duration (s)] = 1.5
      forceEndRoutine = False
      allowedKeys = '1','2','3'
      startVal [time (s)] = 0.0
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    TextComponent tell_visible
      text = ?
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent trigger_visibility
      Begin Routine:
        trials.addData("visible_resptime", globalClock.getTime() - startTime)
    CodeComponent staircase
      End Routine:
        count += 1
        trials.addData('probe_Frames',curr)

        count += 1
        if (visible.keys == str('1')) or (visible.keys == '1'):# invisible
                curr += np.random.choice([1,2,3],size=1)[0]
                if curr < 1:  curr = 1
        elif (visible.keys == str('2')) or (visible.keys == '2'):# partially aware
                curr -= 1
                if curr < 1:  curr = 1
        elif (visible.keys == str('3')) or (visible.keys == '3'): # visible
                curr -= np.random.choice([2,3],size=1,p=[0.5,0.5])[0]
                if curr < 1: curr = 1

        #elif (visible.keys == str('4')) or (visible.keys == '4'): # fully visible
        #        curr -= 3
        #        if curr < 1: curr = 1
  Routine show_message
    CodeComponent print_
      Begin Routine:
        meanacc = trials.data['response.corr'].mean()
        meanvis = trials.data['visible.corr'].mean()
        #msg="{} / {}\n\nmean correct {:.2f} \npresenting frames = {}\nmean unconscious response = {:.3f}" .format(
        #count,n_total,meanacc,curr,meanvis)

        #msg = msg + '\nkey={},cor={}'.format(response.keys,str(temp_correctAns))
        #msg WOULD BE TO DISPLAY IN A TXT OBJECT - THAT HAS BEEN DELETED
      End Routine:
        print("{}/{},mean unconscious = {:.2f}, frame = {}, p(correct) = {:.2f}".format(
            trials.thisN,trials.nTotal,
            meanvis,curr,meanacc))
  Routine premask
    TextComponent fixation
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0
      letterHeight = 0.1
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    TextComponent blank
      stopVal [duration (s)] = 0.5
      startVal [condition] = $fixation.status==FINISHED
      letterHeight = 0.1
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    CodeComponent generate_premask
      End Routine:
        masks_loaded = []
        for n in range(int(premask_dur)):
            mask_temp = np.random.rand(n_square,n_square) * 2 -1
            masks_loaded += [visual.GratingStim(win=win,
            name='postmask_{}'.format(n+1),
            units='pix',
            tex=np.random.rand(n_square,n_square) * 2 -1, mask=None,
            ori=0, pos=(0, 0), size=(image_size, image_size),
            sf=None, phase=1.0,
            color=[1,1,1], colorSpace='rgb', opacity=1,
            texRes=128, interpolate=False, depth=0.0)]
            premasks_loaded[-1].draw() # first draw is slower, so do it now

        win.clearBuffer()

        # ACTION: show mask and the trial's stimulus
        for frame in range(premask_dur):
            masks_loaded[frame].draw()
            stim.draw()
  Routine probe_routine
    CodeComponent code
      Begin Routine:
        trials.addData("image_onset_time", globalClock.getTime() - startTime)
    ImageComponent probe
      stopVal [duration (frames)] = $curr
      units = pix
      startVal [frame N] = 0.0
      image [set every repeat] = $probe_path
      size = $(image_size, image_size)
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  Routine End_experiment
    TextComponent The_End
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_2
      End Experiment:
        print(globalClock.getTime() - startTime)
        print("mean unconscious = {:.2f}, frame = {}, p(correct) = {:.2f}".format(
            meanvis,curr,meanacc))
  Routine setupTRIGetc
    CodeComponent setup_vbles_trigger
      Begin Experiment:
        curr=int(expInfo['probeFrames'])
        count=0

        n_total = 32
        premask_dur = float(expInfo['premask_dur'])
        postmask_dur = float(expInfo['postmask_dur'])
        session = int(expInfo['session'])
        block = int(expInfo['block'])
        n_square = int(expInfo['n_square'])
        image_size = int(expInfo['image_size'])

        import time
        from psychopy import parallel
        parallel.setPortAddress(888)
        wait_msg = "Waiting for Scanner..."
        msg = visual.TextStim(win, color = 'DarkGray', text = wait_msg)
      Begin Routine:
        msg.draw()
        win.flip()

        while True:
            if (parallel.readPin(10) == 1) or (event.getKeys() == ['q']):
                break
            else:
                time.sleep(0.0001) # give 1ms to other processes
        globalClock.reset()
        startTime = globalClock.getTime()
  Routine postmask
    CodeComponent generate_postmask
      Begin Routine:
        win.clearBuffer()

        np.random.shuffle(masks_loaded)

        for frame in range(int(premask_dur)):
            masks_loaded[frame].draw()
            stim.draw()
  Routine post_trial_jitter
    TextComponent post_fixation
      text = +
      stopVal [duration (s)] = $jitter2_delay_dur
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent pick_post_fixation_duration
      Begin Experiment:
        jitter2_dur_options = np.concatenate([[6.0]*16,[6.5]*8,[7.0]*4,[7.5]*2,[8.0]*2])

        np.random.shuffle(jitter2_dur_options)
      Begin Routine:
        jitter2_delay_dur=jitter2_dur_options[jit_count]#first is jit1_count 0

        trials.addData("jitter2", jitter2_delay_dur)

        jit_count+=1
Flow
  Routine setupTRIGetc
  Routine introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = csvs/experiment (sessions 1,block 1 fMRI).csv
    loopType = random
    nReps = 1
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    conditions:
      [{u'category': u'Nonliving_Things', u'index': 71, u'probe_path': u'../experiment_stimuli/bw_bc_bl/Nonliving_Things/Kitchen_Uten/saucepan_0.jpg', u'subcategory': u'Kitchen_Uten', u'label': u'saucepan'},
      {u'category': u'Living_Things', u'index': 73, u'probe_path': u'../experiment_stimuli/bw_bc_bl/Living_Things/Insects/scorpion_2.jpg', u'subcategory': u'Insects', u'label': u'scorpion'},
      {u'category': u'Nonliving_Things', u'index': 72, u'probe_path': u'../experiment_stimuli/bw_bc_bl/Nonliving_Things/Musical_Inst/saxophone_2.jpg', u'subcategory': u'Musical_Inst', u'label': u'saxophone'},
      {u'category': u'Nonliving_Things', u'index': 86, u'probe_path': u'../experiment_stimuli/bw_bc_bl/Nonliving_Things/Vehicles/tractor_24.jpg', u'subcategory': u'Vehicles', u'label': u'tractor'},
      {u'category': u'Nonliving_Things', u'index': 88, u'probe_path': u'../experiment_stimuli/bw_bc_bl/Nonliving_Things/Musical_Inst/trumpet_22.jpg', u'subcategory': u'Musical_Inst', u'label': u'trumpet'},
      {u'category': u'Living_Things', u'index': 43, u'probe_path': u'../experiment_stimuli/bw_bc_bl/Living_Things/Marine_creatures/killer-whale_19.jpg', u'subcategory': u'Marine_creatures', u'label': u'killer-whale'},
      {u'category': u'Nonliving_Things', u'index': 81, u'probe_path': u'../experiment_stimuli/bw_bc_bl/Nonliving_Things/Furniture/table_13.jpg', u'subcategory': u'Furniture', u'label': u'table'}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
    Routine premask
    Routine probe_routine
    Routine postmask
    Routine jitter_delay
    Routine response_routine
    Routine visibility
    Routine post_trial_jitter
    Routine show_message
  LoopTerminator trials
  Routine End_experiment
