PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'probeFrames': u'10', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Save csv file = True
  expName = Expt_DEF
  Screen = 1
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Routines
  Routine response_routine
    CodeComponent reponse_trigger_code
      Begin Routine:
        trials.addData("discrim_resptime", globalClock.getTime() - startTime)

        resp_options = [['nV_V',['Nonliving_Things','Living_Things']],
                        ['V_nV',['Living_Things','Nonliving_Things']]]

        idx = np.random.choice([0,1])
        msg = '{}'.format(resp_options[idx][0])

        trials.addData("response_window", resp_options[idx][0])
      End Routine:
        temp_correctAns = np.where(np.array(resp_options[idx][1]) == category)[0][0]+1

        trials.addData('correctAns',temp_correctAns)

        # objective accuracy

        if (response.keys == str(temp_correctAns)) or (response.keys == temp_correctAns):
           temp_corr = 1
        else:
            temp_corr = 0

        trials.addData('response.corr' , temp_corr)
    KeyboardComponent response
      correctAns = $correctAns
      stopVal [duration (s)] = 1.5
      forceEndRoutine = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
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    TextComponent tell_response
      stopVal [duration (s)] = 1.5
      startVal [frame N] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        $msg
  Routine jitter_delay
    CodeComponent pick_jitter_delay_duration
      Begin Routine:
        jitter_dur_options = [1.5,2.0,2.5,3.0,3.5]
        pick_chance = [0.5,0.25,0.1,0.1,0.05]
        jitter_delay_dur = np.random.choice(jitter_dur_options,size=1,p=pick_chance)[0]

        trials.addData("jitter1", jitter_delay_dur)
    TextComponent delay_post_mask
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine introduction
    TextComponent text
      text = Empezando
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_2
      text = +
      stopVal [duration (s)] = 1
      startVal [time (s)] = 1
      letterHeight = 0.1
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  Routine visibility
    KeyboardComponent visible
      correctAns = 1
      storeCorrect = True
      stopVal [duration (s)] = 1.5
      forceEndRoutine = False
      allowedKeys = '1','2','3','4'
      startVal [time (s)] = 0.0
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    TextComponent tell_visible
      text = ?
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent trigger_visibility
      Begin Routine:
        trials.addData("visibil_resptime", globalClock.getTime() - startTime)
    CodeComponent staircase
      End Routine:
        trials.addData('probeFrames',curr)

        #count += 1
        #if visible.keys == '1':# invisible
        #        curr += 2
        #        if curr > 10: curr = 10
        #
        #elif visible.keys == '2':# partially aware
        #        curr += 1
        #        if curr < 1:  curr = 1
        #        if curr > 10: curr = 10
        #
        #elif visible.keys == '3': # visible
        #        curr -= 1
        #        if curr < 1: curr = 1
        #
        #elif visible.keys == '4': # fully visible
        #        curr -= 2
        #        if curr < 1: curr = 1
  Routine show_message
    CodeComponent print_
      Begin Routine:
        #meanacc = trials.data['response.corr'].mean()
        #meanvis = trials.data['visible.corr'].mean()
        #msg="{} / {}\n\nmean correct {:.2f} \npresenting frames = {}\nmean unconscious response = {:.3f}" .format(
        #count,n_total,meanacc,curr,meanvis)

        #msg = msg + '\nkey={},cor={}'.format(response.keys,str(temp_correctAns))
        #msg WOULD BE TO DISPLAY IN A TXT OBJECT - THAT HAS BEEN DELETED
  Routine premask
    TextComponent fixation
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0
      letterHeight = 0.1
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    TextComponent blank
      stopVal [duration (s)] = 0.5
      startVal [condition] = $fixation.status==FINISHED
      letterHeight = 0.1
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    ImageComponent premask_1
      stopVal [duration (frames)] = $premask_dur
      units = pix
      startVal [condition] = $blank.status==FINISHED
      image [set every repeat] = $premask_path_1
      size = (300, 300)
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    ImageComponent premask_2
      stopVal [duration (frames)] = $premask_dur
      units = pix
      startVal [condition] = $premask_1.status == FINISHED
      image [set every repeat] = $premask_path_2
      size = (300, 300)
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  Routine probe_routine
    CodeComponent code
      Begin Routine:
        trials.addData("image_onset_time", globalClock.getTime() - startTime)
    ImageComponent probe
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $probe_path
      size = (300, 300)
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    KeyboardComponent respond_to_image
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0
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  Routine End_experiment
    TextComponent The_End
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_2
      End Experiment:
        print(globalClock.getTime() - startTime)
  Routine setupTRIGetc
    CodeComponent setup_vbles_trigger
      Begin Experiment:
        curr=float(expInfo['probeFrames'])
        count=0
      Begin Routine:
        globalClock.reset()
        startTime = globalClock.getTime()
  Routine postmask
    ImageComponent postmask_1
      stopVal [duration (frames)] = $postmask_dur
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $postmask_path_1
      size = (300, 300)
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    ImageComponent postmask_2
      stopVal [duration (frames)] = $postmask_dur
      units = pix
      startVal [condition] = $postmask_1.status == FINISHED
      image [set every repeat] = $postmask_path_2
      size = (300, 300)
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  Routine post_trial_jitter
    TextComponent post_fixation
      text = +
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent pick_post_fixation_duration
      Begin Routine:
        jitter_dur_options = [6.0,6.5,7.0,7.5,8.0]
        pick_chance = [0.5,0.25,0.1,0.1,0.05]
        post_trial_jitter_duration = np.random.choice(jitter_dur_options,size=1,p=pick_chance)[0]


        trials.addData("jitter2", post_trial_jitter_duration)
Flow
  Routine setupTRIGetc
  Routine introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = csvs/calibration.csv
    loopType = random
    nReps = 1
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    conditions:
      [{u'category': u'Nonliving_Things', u'index': 78, u'premask_path_2': u'../experiment_stimuli/experiment_images_tilted_scramble_greyscale_2/Nonliving_Things/Furniture/sofa_4_2.jpg', u'subcategory': u'Furniture', u'premask_path_1': u'../experiment_stimuli/experiment_images_tilted_scramble_greyscale_2/Nonliving_Things/Furniture/sofa_4_1.jpg', u'label': u'sofa', u'postmask_path_2': u'../experiment_stimuli/experiment_images_tilted_scramble_greyscale_2/Nonliving_Things/Furniture/sofa_4_2.jpg', u'probe_path': u'../experiment_stimuli/bw_bc_bl/Nonliving_Things/Furniture/sofa_4.jpg', u'postmask_path_1':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,
      {u'category': u'Nonliving_Things', u'index': 89, u'premask_path_2': u'../experiment_stimuli/experiment_images_tilted_scramble_greyscale_2/Nonliving_Things/Musical_Inst/tuba_18_2.jpg', u'subcategory': u'Musical_Inst', u'premask_path_1': u'../experiment_stimuli/experiment_images_tilted_scramble_greyscale_2/Nonliving_Things/Musical_Inst/tuba_18_1.jpg', u'label': u'tuba', u'postmask_path_2': u'../experiment_stimuli/experiment_images_tilted_scramble_greyscale_2/Nonliving_Things/Musical_Inst/tuba_18_2.jpg', u'probe_path': u'../experiment_stimuli/bw_bc_bl/Nonliving_Things/Musical_Inst/tuba_18.jpg', u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,
      {u'category': u'Living_Things', u'index': 40, u'premask_path_2': u'../experiment_stimuli/experiment_images_tilted_scramble_greyscale_2/Living_Things/Birds/hummingbird_12_2.jpg', u'subcategory': u'Birds', u'premask_path_1': u'../experiment_stimuli/experiment_images_tilted_scramble_greyscale_2/Living_Things/Birds/hummingbird_12_1.jpg', u'label': u'hummingbird', u'postmask_path_2': u'../experiment_stimuli/experiment_images_tilted_scramble_greyscale_2/Living_Things/Birds/hummingbird_12_2.jpg', u'probe_path': u'../experiment_stimuli/bw_bc_bl/Living_Things/Birds/hummingbird_12.jpg', u'postmask_path_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,
      {u'category': u'Living_Things', u'index': 46, u'premask_path_2': u'../experiment_stimuli/experiment_images_tilted_scramble_greyscale_2/Living_Things/Marine_creatures/lobster_1_2.jpg', u'subcategory': u'Marine_creatures', u'premask_path_1': u'../experiment_stimuli/experiment_images_tilted_scramble_greyscale_2/Living_Things/Marine_creatures/lobster_1_1.jpg', u'label': u'lobster', u'postmask_path_2': u'../experiment_stimuli/experiment_images_tilted_scramble_greyscale_2/Living_Things/Marine_creatures/lobster_1_2.jpg', u'probe_path': u'../experiment_stimuli/bw_bc_bl/Living_Things/Marine_creatures/l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
    Routine probe_routine
  LoopTerminator trials
  Routine End_experiment
